PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = RubberHand
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Finger
  Routine Instructions
  Routine RandomTimer
  Routine Trust_Slider
Flow
  Routine Instructions
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator Trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine RandomTimer
      Routine Finger
    LoopTerminator Trials
    Routine Trust_Slider
  LoopTerminator Blocks
